PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'starting_run': '0', '': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1792, 1120]
  color = -0.0039, -0.0039, -0.0039
  expName = replicate_nsd
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
    RoutineSettingsComponent trial
      skipIf = is_blank_trial_or_before_starting_run
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    ImageComponent image
      image [set every repeat] = $current_image
      size = (8.4, 8.4)
      startVal [frame N] = 60
      stopVal [duration (frames)] = 180
      units = deg
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    KeyboardComponent press_if_repeat
      allowedKeys = '1','2'
      correctAns = $correct_key_1or2
      forceEndRoutine = False
      startVal [frame N] = 60
      stopVal [duration (frames)] = 180
      storeCorrect = True
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    PolygonComponent polygon
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.5
      shape = circle
      size = (0.2, 0.2)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 240
      units = deg
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    CodeComponent update_num_correct
      Code Type = Auto->JS
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      Begin Experiment:
        num_trials_correct = 0
        num_trials_total = 0
        num_trials_responded = 0
      End Routine:
        if not is_blank_trial_or_before_starting_run:
            thisRun_num_trials_total += 1
            if press_if_repeat.corr == 1:
                thisRun_num_trials_correct += 1
                print("correct!")
            if press_if_repeat.keys != None:
                thisRun_num_trials_responded += 1
                print("responded!")
            print("press_if_repeat.corr: ", press_if_repeat.corr)
            print("press_if_repeat.keys: ", press_if_repeat.keys)
            print("is_repeat: ", is_repeat)
            print("all_keys_pressed: ", all_keys_pressed.keys)
            print("thisRun_num_trials_correct: ", thisRun_num_trials_correct)
            print("thisRun_num_trials_total: ", thisRun_num_trials_total)
            print("run_wait_string: ", run_wait_string)
    KeyboardComponent all_keys_pressed
      allowedKeys = '1','2','3','4'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (frames)] = 240
      store = all keys
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  Routine instructions
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    TextComponent text
      letterHeight = 5
      startVal [time (s)] = 0.0
      text = put instructions here. press spacebar.
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine set_up
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        participant_conditions_file = "conditions_files/participant" + expInfo["participant"] + "_.csv"
        practice_participant_conditions_file = "practice_conditions_files/practice_participant" + expInfo["participant"] + "_.csv"

        starting_run = int(expInfo["starting_run"])
        print("starting_run: ", starting_run)
  Routine waiting_fmri
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    KeyboardComponent key_resp_2
      allowedKeys = '=', 'equal'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = waiting for scanner…
      units = deg
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  Routine blank_trial
    RoutineSettingsComponent blank_trial
      skipIf = is_not_blank_trial_or_before_starting_run
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    KeyboardComponent blank_trial_testing_keys
      allowedKeys = '1','2','3','4'
      forceEndRoutine = False
      startVal [frame N] = 0
      stopVal [duration (frames)] = 240
      store = all keys
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    PolygonComponent polygon_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.5
      shape = circle
      size = (0.2, 0.2)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 240
      units = deg
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  Routine run_wait
    RoutineSettingsComponent run_wait
      skipIf = is_not_new_run
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        is_not_new_run = True
      Begin Routine:
        is_not_new_run = True if not is_new_run else False
    CodeComponent set_up_block
      Code Type = Auto->JS
    TextComponent text_2
      letterHeight = 0.05
      startVal [frame N] = 0
      stopVal [duration (frames)] = 300
      text = waiting.
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  Routine waiting_fmri_2
    RoutineSettingsComponent waiting_fmri_2
      skipIf = is_not_new_run_or_before_starting_run
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    KeyboardComponent key_resp_4
      allowedKeys = '=', 'equal'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = waiting for scanner…
      units = deg
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  Routine set_skips_and_correct_key
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    CodeComponent trial_routine_set_up
      Code Type = Auto->JS
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      Begin Experiment:
        is_blank_trial_or_before_starting_run = False
      Begin Routine:
        if is_blank_trial or run_num < starting_run:
            is_blank_trial_or_before_starting_run = True
        else:
            is_blank_trial_or_before_starting_run = False
    CodeComponent blank_trial_set_up
      Code Type = Auto->JS
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      Begin Experiment:
        is_not_blank_trial_or_before_starting_run = False
      Begin Routine:
        if not is_blank_trial or run_num < starting_run:
            is_not_blank_trial_or_before_starting_run = True
        else:
            is_not_blank_trial_or_before_starting_run = False
    CodeComponent between_round_screens_skip_set_up_2
      Code Type = Auto->JS
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      Begin Experiment:
        is_not_new_run_or_before_starting_run = False
      Begin Routine:
        if not is_new_run or run_num < starting_run:
            is_not_new_run_or_before_starting_run = True
        else:
            is_not_new_run_or_before_starting_run = False
    CodeComponent set_correct_key
      Code Type = Auto->JS
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      Begin Experiment:
        correct_key_1or2 = '-1'
      Begin Routine:
        if is_repeat:
            correct_key_1or2 = '2'
        else:
            correct_key_1or2 = '1'
        print("correct_key_1or2: ", correct_key_1or2)
  Routine practice_trial
    RoutineSettingsComponent practice_trial
      skipIf = is_blank_trial
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    ImageComponent image_2
      image [set every repeat] = $current_image
      size = (8.4, 8.4)
      startVal [frame N] = 60
      stopVal [duration (frames)] = 180
      units = deg
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    KeyboardComponent press_if_repeat_2
      allowedKeys = '1','2'
      correctAns = $correct_key_1or2
      forceEndRoutine = False
      startVal [frame N] = 60
      stopVal [duration (frames)] = 180
      storeCorrect = True
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    PolygonComponent polygon_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.5
      shape = circle
      size = (0.2, 0.2)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 240
      units = deg
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    KeyboardComponent all_keys_pressed_2
      allowedKeys = '1','2','3','4'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (frames)] = 240
      store = all keys
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  Routine run_wait2_2
    RoutineSettingsComponent run_wait2_2
      skipIf = is_not_new_run_or_before_starting_run
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    KeyboardComponent key_resp_5
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent dynamic_feedback_string
      Code Type = Py
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      Before Experiment:
        run_wait_string = ""
      Begin Experiment:
        run_wait_string = ""
      Begin Routine:
        if is_new_run and run_num >= starting_run:
            run_wait_string = "Good job! Your average accuracy in this run is " + str(thisRun_num_trials_correct / thisRun_num_trials_total) + \
                            ". Please press any button when you are ready to continue to run " + str(run_num + 2) + "."
            print("thisRun_num_trials_correct: ", thisRun_num_trials_correct)
            print("thisRun_num_trials_total: ", thisRun_num_trials_total)
            print("run_wait_string: ", run_wait_string)
    CodeComponent set_up_within_round_performance
      Code Type = Auto->JS
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      Begin Experiment:
        thisRun_num_trials_correct = 0
        thisRun_num_trials_total = 0
        thisRun_num_trials_responded = 0
      End Routine:
        if is_new_run:
            thisRun_num_trials_correct = 0
            thisRun_num_trials_total = 0
            thisRun_num_trials_responded = 0
    TextComponent text_5
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $run_wait_string
  Routine practice_continue
    RoutineSettingsComponent practice_continue
      skipIf = is_not_new_run_or_before_starting_run
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    KeyboardComponent key_resp_6
      allowedKeys = '1','2', '3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text [set every repeat] = Press any button to begin the practice trials.
      units = deg
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  Routine testing_continue
    RoutineSettingsComponent testing_continue
      skipIf = is_not_new_run_or_before_starting_run
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    KeyboardComponent key_resp_7
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text [set every repeat] = Good job! You finished the practice trials. Press any button to begin the experiment.
      units = deg
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  Routine blank_trial_2
    RoutineSettingsComponent blank_trial_2
      skipIf = is_not_blank_trial
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    PolygonComponent polygon_4
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.5
      shape = circle
      size = (0.2, 0.2)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 240
      units = deg
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  Routine set_skips_and_correct_key_2
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    CodeComponent blank_trial_set_up_2
      Code Type = Auto->JS
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      Begin Experiment:
        is_not_blank_trial= False
      Begin Routine:
        if not is_blank_trial:
            is_not_blank_trial = True
        else:
            is_not_blank_trial = False
Flow
  Routine set_up
  Routine practice_continue
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = $practice_participant_conditions_file
    loopType = sequential
    nReps = 1
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    Routine set_skips_and_correct_key_2
    Routine practice_trial
    Routine blank_trial_2
  LoopTerminator practice
  Routine testing_continue
  Routine waiting_fmri
  LoopInitiator loop_all_images loopType="TrialHandler"
    conditionsFile = $participant_conditions_file
    loopType = sequential
    nReps = 1
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    Routine set_skips_and_correct_key
    Routine trial
    Routine blank_trial
    Routine run_wait2_2
    Routine waiting_fmri_2
  LoopTerminator loop_all_images
